/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "sequential-read-write" // with firmware nine, use broadcast-read-write
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm": "suj-si.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "809610",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "299976",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "268129",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "552829",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "55839",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "56253",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM3",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
